/gate/source/addSource mybeam gps
/gate/source/mybeam/attachTo							Gantry
/gate/source/mybeam/gps/particle       					proton
/gate/source/mybeam/gps/ene/mono      					147.7 MeV
/gate/source/mybeam/gps/ene/type       					Gauss
/gate/source/mybeam/gps/ene/sigma     					0.8 MeV
/gate/source/mybeam/gps/pos/type       					Point
/gate/source/mybeam/gps/pos/halfx 91 mm
/gate/source/mybeam/gps/pos/halfy      					5 mm
/gate/source/mybeam/gps/pos/centre     					-5 0 0 mm
/gate/source/mybeam/gps/pos/rot1       					0 1 0
/gate/source/mybeam/gps/pos/rot2       					0 0 1
/gate/source/mybeam/gps/pos/type       					Plane
/gate/source/mybeam/gps/pos/shape      					Rectangle
/gate/source/mybeam/gps/direction      					-1 0 0
/gate/source/mybeam/gps/ang/type       					focused
/gate/source/mybeam/gps/ang/rot1       					0 1 0
/gate/source/mybeam/gps/ang/rot2       					0 0 1
/gate/source/mybeam/gps/ang/focuspoint 					-15 0 0 mm
