
#=====================================================
# VERBOSITY
#=====================================================

/control/execute mac/verbose.mac

#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac

#=====================================================
# GEOMETRY
#=====================================================

# World
/gate/geometry/setMaterialDatabase						data/GateMaterials.db
/gate/world/setMaterial									Air
/gate/world/geometry/setXLength							1000 mm
/gate/world/geometry/setYLength							1000 mm
/gate/world/geometry/setZLength    						1000 mm
/gate/world/vis/setVisible                              1

# ----------------------------GEOMETRY-----------------------------------------

# Scanner
/gate/world/daughters/name								CTscanner
/gate/world/daughters/insert            				box
/gate/CTscanner/geometry/setZLength						280 mm
/gate/CTscanner/geometry/setYLength						280 mm
/gate/CTscanner/geometry/setXLength       				280 mm
/gate/CTscanner/setMaterial               				Air
/gate/CTscanner/vis/setVisible            				0
/gate/CTscanner/vis/setColor              				white

#------------

# Module contains clusters
/gate/CTscanner/daughters/name							module
/gate/CTscanner/daughters/insert            			box
/gate/module/geometry/setZLength						280 mm
/gate/module/geometry/setYLength       					280 mm
/gate/module/geometry/setXLength       					280 mm
/gate/module/setMaterial               					Air
/gate/module/vis/setVisible            					0
/gate/module/vis/setColor              					blue

#------------

# Cluster contains pixels
/gate/module/daughters/name								cluster
/gate/module/daughters/insert            				box
/gate/cluster/geometry/setZLength       				280 mm
/gate/cluster/geometry/setYLength       				280 mm
/gate/cluster/geometry/setXLength       				280 mm
#/gate/cluster/placement/setTranslation  				-540 0 0 mm
/gate/cluster/placement/setRotationAxis         0 1 0
/gate/cluster/placement/setRotationAngle 350 deg

/gate/cluster/setMaterial               				Air
/gate/cluster/vis/setVisible            				0
/gate/cluster/vis/setColor              				green

# ----------------------------PIXEL-----------------------------------------

# Pixels are the sensitive portion of the detector
/gate/cluster/daughters/name							cube
/gate/cluster/daughters/insert							box
/gate/cube/geometry/setXLength							4.8 mm
/gate/cube/geometry/setYLength							10 mm
/gate/cube/geometry/setZLength							10 mm
#/gate/cube/setMaterial									Air
/gate/cube/setMaterial									hd_scint_glass_Eu
/gate/cube/vis/setColor									red


# REPEAT PIXEl_0
/gate/cube/repeaters/insert								cubicArray
/gate/cube/cubicArray/setRepeatNumberX					8
/gate/cube/cubicArray/setRepeatNumberY					8
/gate/cube/cubicArray/setRepeatNumberZ   				8
/gate/cube/cubicArray/setRepeatVector 	    			4.8 10. 10.  mm
/gate/cube/cubicArray/autoCenter 		    			true

# ----------------------------GEOMETRY-----------------------------------------

# Gantry
/gate/world/daughters/name								Gantry
/gate/world/daughters/insert         					box
/gate/Gantry/geometry/setZLength     					10 mm
/gate/Gantry/geometry/setYLength     					10 mm
/gate/Gantry/geometry/setXLength     					10 mm
/gate/Gantry/placement/setTranslation  				    175 0 0 mm
/gate/Gantry/setMaterial             					Air
/gate/Gantry/vis/setVisible          					1
/gate/Gantry/vis/setColor            					yellow

#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addPhysicsList emstandard_opt1
/gate/physics/addPhysicsList QGSP_BIC_EMY

/gate/physics/Gamma/SetCutInRegion						world 10 mm
/gate/physics/Electron/SetCutInRegion   				world 10 mm
/gate/physics/Positron/SetCutInRegion					world 10 mm
/gate/physics/Proton/SetCutInRegion						world 10 mm

/gate/physics/Gamma/SetCutInRegion						cube 10 mm
/gate/physics/Electron/SetCutInRegion   				cube 10 mm
/gate/physics/Positron/SetCutInRegion   				cube 10 mm
/gate/physics/Proton/SetCutInRegion						cube 10 mm

# /gate/physics/SetMinRemainingRangeInRegion world 10 mm
# /gate/physics/ActivateSpecialCuts e-

/gate/physics/displayCuts

#=====================================================
# INITIALISATION
#=====================================================


# Attaching geometries to sensitive detectors
/gate/systems/CTscanner/module/attach					module
/gate/systems/CTscanner/cluster_0/attach				cluster
/gate/systems/CTscanner/pixel_0/attach					cube

/gate/cube/attachCrystalSD

/gate/output/ascii/enable
/gate/output/ascii/reset
/gate/output/ascii/setOutFileHitsFlag            1
/gate/output/ascii/setOutFileSinglesFlag         0

/gate/output/ascii/setFileName output/W50__H50__A350_cubes_

/gate/run/initialize
#=====================================================
# BEAM
#=====================================================

/gate/source/addSource mybeam gps
/gate/source/mybeam/attachTo							Gantry
/gate/source/mybeam/gps/particle       					gamma
/gate/source/mybeam/gps/ene/mono      					147.7 MeV
/gate/source/mybeam/gps/ene/type       					Gauss
/gate/source/mybeam/gps/ene/sigma     					0.8 MeV
/gate/source/mybeam/gps/pos/halfx 25.00 mm
/gate/source/mybeam/gps/pos/halfy 25.00 mm
/gate/source/mybeam/gps/pos/centre     					-5 0 0 mm
/gate/source/mybeam/gps/pos/rot1       					0 1 0
/gate/source/mybeam/gps/pos/rot2       					0 0 1
/gate/source/mybeam/gps/pos/type       					Beam
/gate/source/mybeam/gps/pos/shape      					Rectangle
/gate/source/mybeam/gps/direction      					-1 0 0
#/gate/source/mybeam/gps/ang/type       					focused
#/gate/source/mybeam/gps/ang/rot1       					0 1 0
#/gate/source/mybeam/gps/ang/rot2       					0 0 1
#/gate/source/mybeam/gps/ang/focuspoint 					-15 0 0 mm

# The pos/type Beam eliminates the need
# for angular specifications since
# it defaults to shooting the beam perfectly
# perpendicular to the emitting surface

# halfx and halfy are 'flipped' in terms of the axes objects when visualizing

#=====================================================
# MAIN
#=====================================================

# DEBUG
#/tracking/verbose 1
#/tracking/verbose 1

/gate/application/setTimeSlice							1		s
/gate/application/setTimeStart							0.		s
/gate/application/setTimeStop							1.		s

/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto

/gate/application/setTotalNumberOfPrimaries				10000
/gate/application/start
